PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = compare_lines
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Routines
  Routine ISI
    TextComponent ISITimer
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    CodeComponent LineDefine
      Code Type = Py
      Begin Routine:
        start_left_line = RotationCondition[line_orientation][0][0]
        end_left_line = RotationCondition[line_orientation][0][1]
        start_right_line = RotationCondition[line_orientation][1][0]
        end_right_line = RotationCondition[line_orientation][1][1]
  Routine sequential_line1
    CodeComponent SOABeginRoutine
      Code Type = Py
      Begin Routine:
        if np.random.uniform() > .5:
            first_line = (start_left_line, end_left_line)
            second_line = (start_right_line, end_right_line)
        else:
            second_line = (start_left_line, end_left_line)
            first_line = (start_right_line, end_right_line)
    CodeComponent SOAEachFrame
      Code Type = Py
      Each Frame:
        draw_line(first_line[0], first_line[1])
    TextComponent FirstLineTimer
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent ConditionCheckLine1
      Code Type = Py
      Begin Routine:
        if current_block == 'simultaneous':
            continueRoutine = False
    CodeComponent TimeLine1
      Code Type = Py
      Begin Routine:
        from datetime import datetime

        start = datetime.now()
      Each Frame:
        if (start - datetime.now()).total_seconds() >= 1:
            continueRoutine = False
  Routine sequential_gap
    TextComponent GapTimer
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    CodeComponent ConditionCheckGap
      Code Type = Py
      Begin Routine:
        if current_block == 'simultaneous':
            continueRoutine = False
  Routine sequential_line2
    CodeComponent EachFrame
      Code Type = Py
      Each Frame:
        if t <= 1.0:
            draw_line(second_line[0], second_line[1])
    CodeComponent ConditionCheckLine2
      Code Type = Py
      Begin Routine:
        if current_block == 'simultaneous':
            continueRoutine = False
    KeyboardComponent SeqResponse
      allowedKeys = 'left','right','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine simultaneous
    CodeComponent DrawLinesSimultaneous
      Code Type = Py
      Each Frame:
        if t <= 2.0:
            draw_line(start_left_line, end_left_line)
            draw_line(start_right_line, end_right_line)
    CodeComponent ConditionCheckSimul
      Code Type = Py
      Begin Routine:
        if current_block == 'sequential':
            continueRoutine = False
    KeyboardComponent ResponseSimul
      allowedKeys = 'left','right','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response
    KeyboardComponent key_resp
      allowedKeys = 'down','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StartBlock
    CodeComponent SetBlockType
      Code Type = Py
      Begin Experiment:
        block_count += 1

        if block_count == 1:
            current_block = first_block
        else:
            current_block = second_block
  Routine GlobalDefs
    CodeComponent FunctionDefine
      Code Type = Py
      Begin Experiment:
        import psychopy
        import time\

        def determine_diagonal(start_coord_left_line, length, x_direction, y_direction):
            x_shift = 1 if x_direction == 'right' else -1
            y_shift = 1 if y_direction == 'up' else -1

            start_x = start_coord_left_line[0]
            start_y = start_coord_left_line[1]
            end_coord_left_line_x = start_x + x_shift* (length * cos(1.0472))
            end_coord_left_line_y = start_y + y_shift* (length * sin(1.0472))

            return (end_coord_left_line_x, end_coord_left_line_y)


        def draw_line(start_coord, end_coord):

            line = psychopy.visual.Line(
            win = win,
            units='pix',
            lineColor=[-1, -1, -1]
            )

            line.start = start_coord
            line.end = end_coord
            line.draw()
    CodeComponent ObjectDefine
      Code Type = Py
      Begin Experiment:
        from math import *

        '''
        Formula for calculating coordinates:
        xx = x + (d * cos(alpha))
        yy = y + (d * sin(alpha))
        '''

        length = 300
        starting_point_left_x = -300
        distance_between_lines = 600
        ## horizontal lines always zero
        starting_point_y = length / 2



        ## VERTICAL LINES
        vertical_starting_point_line1 = (starting_point_left_x, starting_point_y)
        vertical_ending_point_line1 = (starting_point_left_x, starting_point_y - length)
        vertical_starting_point_line2 = (starting_point_left_x + distance_between_lines, starting_point_y)
        vertical_ending_point_line2 = (starting_point_left_x + distance_between_lines, starting_point_y - length)

        ## HORIZONTAL LINES
        horizontal_starting_point_line1 = (starting_point_left_x - (length / 2), 0)
        horizontal_ending_point_line1 = (starting_point_left_x + (length / 2), 0)
        horizontal_starting_point_line2 = (horizontal_starting_point_line1[0] + distance_between_lines, 0)
        horizontal_ending_point_line2  = (horizontal_ending_point_line1[0] + distance_between_lines, 0)

        ## DIAGONAL LINES
        ## forward slash (ie starts at top and goes forward)
        forward_starting_point_line1 = determine_diagonal((starting_point_left_x, 0), length/2, x_direction = 'left', y_direction = 'up')
        forward_ending_point_line1 = determine_diagonal((starting_point_left_x, 0), length/2, x_direction = 'right', y_direction = 'down')
        forward_starting_point_line2 = (forward_starting_point_line1[0] + distance_between_lines, forward_starting_point_line1[1])
        forward_ending_point_line2 = (forward_ending_point_line1[0] + distance_between_lines, forward_ending_point_line1[1])

        ## backward slash (ie starts at top and goes back)
        backward_starting_point_line1 = determine_diagonal((starting_point_left_x, 0), length/2, x_direction = 'right', y_direction = 'up')
        backward_ending_point_line1 = determine_diagonal((starting_point_left_x, 0), length/2, x_direction = 'left', y_direction = 'down')
        backward_starting_point_line2 = (backward_starting_point_line1[0] + distance_between_lines, backward_starting_point_line1[1])
        backward_ending_point_line2 = (backward_ending_point_line1[0] + distance_between_lines, backward_ending_point_line1[1])



        RotationCondition = {
        'vertical': [[vertical_starting_point_line1, vertical_ending_point_line1],
        [vertical_starting_point_line2, vertical_ending_point_line2]],

        'horizontal': [[horizontal_starting_point_line1, horizontal_ending_point_line1],
        [horizontal_starting_point_line2, horizontal_ending_point_line2]],

        'diagonal1': [[forward_starting_point_line1, forward_ending_point_line1], [forward_starting_point_line2, forward_ending_point_line2]],
        'diagonal2': [[backward_starting_point_line1, backward_ending_point_line1], [backward_starting_point_line2, backward_ending_point_line2]]
        }
    CodeComponent BlockOrder
      Code Type = Py
      Begin Experiment:
        if np.random.uniform() > .5:
            first_block = 'sequential'
            second_block= 'simultaneous'
        else:
            first_block = 'simultaneous'
            second_block = 'sequential'

        block_count = 0
Flow
  Routine GlobalDefs
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine StartBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.csv
      loopType = random
      nReps = 10
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      conditions:
        [OrderedDict([('line_orientation', 'horizontal'), ('stimulus_offset', 0.0)]),
        OrderedDict([('line_orientation', 'vertical'), ('stimulus_offset', 0.0)]),
        OrderedDict([('line_orientation', 'diagonal1'), ('stimulus_offset', 0.0)]),
        OrderedDict([('line_orientation', 'diagonal2'), ('stimulus_offset', 0.0)]),
        OrderedDict([('line_orientation', 'horizontal'), ('stimulus_offset', 0.25)]),
        OrderedDict([('line_orientation', 'vertical'), ('stimulus_offset', 0.25)]),
        OrderedDict([('line_orientation', 'diagonal1'), ('stimulus_offset', 0.25)]),
        OrderedDict([('line_orientation', 'diagonal2'), ('stimulus_offset', 0.25)]),
        OrderedDict([('line_orientation', 'horizontal'), ('stimulus_offset', 0.5)]),
        OrderedDict([('line_orientation', 'vertical'), ('stimulus_offset', 0.5)]),
        OrderedDict([('line_orientation', 'diagonal1'), ('stimulus_offset', 0.5)]),
        OrderedDict([('line_orientation', 'diagonal2'), ('stimulus_offset', 0.5)]),
        OrderedDict([('line_orientation', 'horizontal'), ('stimulus_offset', 0.75)]),
        OrderedDict([('line_orientation', 'vertical'), ('stimulus_offset', 0.75)]),
        OrderedDict([('line_orientation', 'diagonal1'), ('stimulus_offset', 0.75)]),
        OrderedDict([('line_orientation', 'diagonal2'), ('stimulus_offset', 0.75)]),
        OrderedDict([('line_orientation', 'horizontal'), ('stimulus_offset', 1.0)]),
        OrderedDict([('line_orientation', 'vertical'), ('stimulus_offset', 1.0)]),
        OrderedDict([('line_orientation', 'diagonal1'), ('stimulus_offset', 1.0)]),
        OrderedDict([('line_orientation', 'diagonal2'), ('stimulus_offset', 1.0)])]
      Routine ISI
      Routine sequential_line1
      Routine sequential_gap
      Routine sequential_line2
      Routine simultaneous
    LoopTerminator trials
  LoopTerminator blocks
